<CompuCell3D Revision="20180617" Version="3.7.8">
   
   <Potts>
      
      <!-- Basic properties of CPM (GGH) algorithm -->
      <Dimensions x="200" y="200" z="1"/>
      <Steps>10000</Steps>
      <Temperature>10.0</Temperature>
      <NeighborOrder>3</NeighborOrder>
   </Potts>
   
   <Plugin Name="CellType">
      
      <CellType TypeId="0" TypeName="Medium"/>
      <CellType TypeId="1" TypeName="vasc"/>
      <CellType TypeId="2" TypeName="tumor"/>
   </Plugin>
   
   <Plugin Name="Volume"/>
   
   <Plugin Name="CenterOfMass">
      
      <!-- Module tracking center of mass of each cell -->
   </Plugin>
   
    <Plugin Name="Contact">
       <!-- Specification of adhesion energies -->
       <Energy Type1="Medium" Type2="Medium">10.0</Energy>
       <Energy Type1="Medium" Type2="vasc">6.0</Energy>
       <Energy Type1="Medium" Type2="tumor">10.0</Energy>
       <Energy Type1="vasc" Type2="vasc">10.0</Energy>
       <Energy Type1="vasc" Type2="tumor">10.0</Energy>
       <Energy Type1="tumor" Type2="tumor">10.0</Energy>
       <NeighborOrder>3</NeighborOrder>
    </Plugin>
   
   <Plugin Name="Chemotaxis">
   
    <ChemicalField Name="VEGF">
      <ChemotaxisByType ChemotactTowards="Medium" Lambda="300.0" Type="vasc"/>
    </ChemicalField>
    </Plugin>

   
   <Steppable Type="DiffusionSolverFE">
   
      <DiffusionField Name="VEGF">
         <DiffusionData>
            <FieldName>VEGF</FieldName>
            <GlobalDiffusionConstant>0.74</GlobalDiffusionConstant>
            <GlobalDecayConstant>0.0</GlobalDecayConstant>
            <DecayCoefficient CellType="Medium">0.04</DecayCoefficient>
         </DiffusionData>
         <SecretionData>
            <Secretion Type="vasc">0.04</Secretion>
         </SecretionData>
      </DiffusionField>

      <DiffusionField Name="Glucose">
         <DiffusionData>
            <FieldName>Glucose</FieldName>
            <GlobalDiffusionConstant>0.74</GlobalDiffusionConstant>
            <GlobalDecayConstant>0.00004</GlobalDecayConstant>
         </DiffusionData>
      </DiffusionField>
      
      
   </Steppable>
   
   <Steppable Type="UniformInitializer">
      
      <Region>
         <BoxMin x="40" y="40" z="0"/>
         <BoxMax x="100" y="100" z="1"/>
         <Gap>0</Gap>
         <Width>3</Width>
         <Types>vasc</Types>
      </Region>
   </Steppable>
</CompuCell3D>
